CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "image")
    Name to assign these images:Spot_Crop
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does startwith "segments")
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    Name to assign these objects:Segments
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Spot_Crop
    Conversion method:Combine
    Image type:RGB
    Name the output image:SpotGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
MeasureGranularity:[module_num:6|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
    Select images to measure:SpotGray
    Measure within objects?:Yes
    Select objects to measure:Segments
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|projects\\feature_extraction_tutorial
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:squidpy_
    Overwrite existing files without warning?:No
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